PsychoPy2experiment version="2022.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.1
  Window size (pixels) = [1680, 1050]
  expName = eyewitness
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine INSTRUCTIONS
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        EYEWITNESS TESTIMONY

        YOU BRIEFLY SPOT A SUSPECT FLEEING A CRIME SCENE. IDENTIFY THEM FROM AN INNOCENT PERSON.

        USE [LEFT] OR [RIGHT] ARROW TO MAKE SELECTION

        PRESS [SPACE] TO CONTINUE...
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ENCODE
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        stimuli_list = data.importConditions('eyewitness_trials.csv')

        #init variables
        encoding_image_list = []
        encoding_duration_list = []
        left_image_list = []
        right_image_list = []
        correct_position_list = []

        num_trials = len(stimuli_list)

        for row in stimuli_list:
            encoding_image_list.append(row['encoding_image'])
            encoding_duration_list.append(row['encoding_duration'])
            left_image_list.append(row['left_image'])
            right_image_list.append(row['right_image'])
            correct_position_list.append(row['correct_position'])
      Begin Routine:
        encoding_image = encoding_image_list[trial_loop.thisRepN]
        encoding_duration = encoding_duration_list[trial_loop.thisRepN]

        # log encoding details
        thisExp.addData('encoding_image', encoding_image)  # suspect flashed
        thisExp.addData('encoding_duration', encoding_duration)  # duration of flash
    ImageComponent image
      image [set every repeat] = $encoding_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $encoding_duration
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  Routine TRIAL
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        session_list = list()

        #global vars
        n_trial = 0
        correct_responses = 0
        total_trials = 0
      Begin Routine:
        left_image = left_image_list[trial_loop.thisRepN]
        right_image = right_image_list[trial_loop.thisRepN]
        correct_position = correct_position_list[trial_loop.thisRepN]

        #track trial number
        thisExp.addData('trial_number', trial_loop.thisRepN)

        #note the correct position
        thisExp.addData('correct_position', correct_position)
      End Experiment:
        session_df = pd.DataFrame(session_list,
                                 columns = ['total_trials','left_image','right_image','encoding_duration','resp','correct','correct_responses'])
        output_filepath = 'sub-' + expInfo['participant'] + '_eyewitness_results.csv'

        session_df.to_csv(output_filepath)
      End Routine:
        # increment trial count
        total_trials += 1

        # check participant response
        if key_resp.keys == correct_position:
            thisExp.addData('correct', True)
            correct = 1

            correct_responses += 1
        else:
            thisExp.addData('correct', False)
            correct = 0

        # Log response
        thisExp.addData('response', key_resp.keys)
        resp = key_resp.keys

        # Log cumulative performance
        thisExp.addData('total_trials', total_trials)
        thisExp.addData('correct_responses', correct_responses)

        trial_list = [total_trials,left_image,right_image,encoding_duration,resp,correct,correct_responses]

        session_list.append(trial_list)
    ImageComponent left
      image [set every repeat] = $left_image
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent right
      image [set every repeat] = $right_image
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine DELAY
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine DELAY_2
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine EXAMPLE_1
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = You will be presented with a suspect:
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    ImageComponent image_2
      image = elmo1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine EXAMPLE_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        You will be presented with a different picture of the suspect next to an innocent person.

        Pick the suspect, using [LEFT] or [RIGHT] arrow on keyboard
  Routine EXAMPLE_3
  Routine EXAMPLE_END
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = GREAT! PRESS [SPACE] TO BEGIN
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EXAMPLE
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = PICK THE SUSPECT: [LEFT] OR [RIGHT]
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    ImageComponent image_3
      image = elmo2.png
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent image_4
      image = cookie.png
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_3
  Routine between
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Followed by a 10 second fixation cross... 
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine COMPLETED
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        EXPERIMENT COMPLETE!

        THANK YOU FOR YOUR TIME.
  Routine pretrial
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $f"Trial #{total_trials+1}"
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Flow
  Routine INSTRUCTIONS
  Routine EXAMPLE_1
  Routine between
  Routine EXAMPLE_2
  Routine EXAMPLE
  Routine EXAMPLE_END
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = num_trials
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    conditions:
      [OrderedDict([('encoding_image', 'suspect1.png'), ('target_image', 'target1.png'), ('innocent_image', 'innocent1.png'), ('correct_position', 'right'), ('left_image', 'innocent1.png'), ('right_image', 'target1.png'), ('encoding_duration', 1.5)]),
      OrderedDict([('encoding_image', 'suspect2.png'), ('target_image', 'target2.png'), ('innocent_image', 'innocent2.png'), ('correct_position', 'right'), ('left_image', 'innocent2.png'), ('right_image', 'target2.png'), ('encoding_duration', 1.5)]),
      OrderedDict([('encoding_image', 'suspect3.png'), ('target_image', 'target3.png'), ('innocent_image', 'innocent3.png'), ('correct_position', 'left'), ('left_image', 'target3.png'), ('right_image', 'innocent3.png'), ('encoding_duration', 0.5)]),
      OrderedDict([('encoding_image', 'suspect4.png'), ('target_image', 'target4.png'), ('innocent_image', 'innocent4.png'), ('correct_position', 'right'), ('left_image', 'innocent4.png'), ('right_image', 'target4.png'), ('encoding_duration', 1.5)]),
      OrderedDict([('encoding_image', 'suspect5.png'), ('target_image', 'target5.png'), ('innocent_image', 'innocent5.png'), ('correct_position', 'right'), ('left_image', 'innocent5.png'), ('right_image', 'target5.png'), ('encoding_duration', 0.5)]),
      OrderedDict([('encoding_image', 'suspect6.png'), ('target_image', 'target6.png'), ('innocent_image', 'innocent6.png'), ('correct_position', 'right'), ('left_image', 'innocent6.png'), ('right_image', 'target6.png'), ('encoding_duration', 0.5)])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
    Routine pretrial
    Routine ENCODE
    Routine DELAY
    Routine TRIAL
  LoopTerminator trial_loop
  Routine COMPLETED
